milling:
    fiducial:
    -   milling:
            application_file: Si
            hfw: 8.0e-05
            milling_current: 7.6e-09
            preset: 30 keV; 20 nA
        name: Fiducial
        pattern:
            cleaning_cross_section: false
            depth: 1.5e-06
            height: 1.0e-05
            name: Fiducial
            passes: null
            rotation: 45
            width: 1.0e-06
            point: {"x": 25.0e-6, "y": 0.0e-6}
        strategy: {}
    microexpansion:
    -   milling:
            application_file: Si
            hfw: 200e-6
            milling_current: 2.0e-09
            preset: 30 keV; 2.5 nA
        name: MicroExpansion
        pattern:
            depth: 1.0e-06
            distance: 1.0e-05
            height: 1.8e-05
            name: MicroExpansion
            width: 5.0e-07
        strategy: {}
    mill_polishing:
    -   milling:
            application_file: Si-ccs
            hfw: 8.0e-05
            milling_current: 6.0e-11
            preset: 30 keV; 50 pA
        name: Polishing 01
        pattern:
            cross_section: CleaningCrossSection
            depth: 4.0e-07
            lower_trench_height: 6.0e-07
            name: Trench
            spacing: 4.5e-07
            upper_trench_height: 6.0e-07
            width: 1.2e-05
        strategy: {}
    -   milling:
            application_file: Si-ccs
            hfw: 8.0e-05
            milling_current: 6.0e-11
            preset: 30 keV; 50 pA
        name: Polishing 02
        pattern:
            cross_section: CleaningCrossSection
            depth: 2.0e-07
            lower_trench_height: 4.0e-07
            name: Trench
            spacing: 3.0e-07
            upper_trench_height: 4.0e-07
            width: 1.0e-05
        strategy: {}
    mill_rough:
    -   milling:
            application_file: Si-ccs
            hfw: 8.0e-05
            milling_current: 2.0e-09
            preset: 30 keV; 2.5 nA
        name: Rough Milling 01
        pattern:
            cross_section: CleaningCrossSection
            depth: 2.0e-06
            lower_trench_height: 5.0e-06
            name: Trench
            spacing: 4.5e-06
            upper_trench_height: 5.0e-06
            width: 1.4e-05
        strategy: {}
    -   milling:
            application_file: Si-ccs
            hfw: 8.0e-05
            milling_current: 7.4e-10
            preset: 30 keV; 1 nA
        name: Rough Milling 02
        pattern:
            cross_section: CleaningCrossSection
            depth: 1.0e-06
            lower_trench_height: 2.0e-06
            name: Trench
            spacing: 1.5e-06
            upper_trench_height: 2.0e-06
            width: 1.4e-05
        strategy: {}
    notch:
    -   milling:
            application_file: Si-ccs
            hfw: 80e-6
            milling_current: 2.0e-09
            preset: 30 keV; 2.5 nA
        name: Notch 01
        pattern:
            depth: 2.5e-06
            distance: 2.0e-06
            flip: 0
            hheight: 2.0e-07
            hwidth: 4.0e-06
            name: WaffleNotch
            vheight: 2.0e-06
            vwidth: 2.0e-07
            point: {"x": 7.0e-6, "y": 0.0e-6}
        strategy: {}
    trench:
    -   milling:
            application_file: Si
            hfw: 0.00018
            milling_current: 7.6e-09
            milling_voltage: 30000
            preset: 30 keV; 2.5 nA
        name: Trench 01
        pattern:
            depth: 1.25e-06
            lower_trench_height: 3.2e-05
            name: Trench
            spacing: 2.5e-05
            upper_trench_height: 1.6e-05
            width: 2.2e-05
        strategy: {}
    undercut:
    -   milling:
            application_file: Si
            hfw: 8.0e-05
            milling_current: 7.6e-09
            preset: 30 keV; 2.5 nA
        name: Undercut 01
        pattern:
            depth: 1.2e-06
            height: 1.6e-05
            name: Rectangle
            width: 2.2e-05
        strategy: {}
    -   milling:
            application_file: Si
            hfw: 8.0e-05
            milling_current: 7.6e-09
            preset: 30 keV; 2.5 nA
        name: Undercut 01
        pattern:
            depth: 1.2e-06
            height: 8.0e-06
            name: Rectangle
            width: 2.2e-05
        strategy: {}
options:
    alignment_at_milling_current: false
    alignment_attempts: 3.0
    checkpoint: autolamella-waffle-20240107.pt
    compucentric_x_offset: 0.0
    compucentric_y_offset: 0.0
    high_quality_image:
        dwell_time: 2.0e-06
        enabled: false
        frame_integration: 2
        hfw: 5.0e-05
        resolution:
        - 3072
        - 2048
    lamella_tilt_angle: 18.0
    method: autolamella-waffle
    name: autolamella-waffle-scan-rotation-0deg
    supervise:
        mill_polishing: true
        mill_rough: true
        setup_lamella: true
        trench: true
        undercut: true
    take_final_overview_image: true
    take_final_reference_images: true
    undercut_tilt_angle: -5.0
    use_fiducial: true
    use_microexpansion: false
    use_notch: true
