name: AutoLamella Protocol
description: On Grid Lamella Preparation Protocol
version: "1.0"
tasks:
  Setup Lamella Position:
    task_type: SELECT_MILLING_POSITION
    parameters:
      milling_angle: 15
  Mill Fiducial:
    task_type: MILL_FIDUCIAL
    parameters:
      alignment_expansion: 150
    milling:
      fiducial:
        name: Fiducial
        field_of_view: 100.0e-6
        alignment:
          enabled: false
        stages:
          - name: Fiducial 01
            milling:
              milling_current: 1.0e-09
              application_file: Si
              milling_voltage: 30000.0
            pattern:
              point:
                x: 2.5e-05
                y: 0.0
                name: null
              width: 1.0e-06
              height: 1.0e-05
              depth: 1.0e-06
              rotation: 45
              cross_section: Rectangle
              asymmetric: false
              name: Fiducial
            strategy:
              name: Standard
              config: {}
  Rough Milling:
    task_type: MILL_ROUGH
    milling:
      mill_rough:
        name: Rough Milling
        field_of_view: 100.0e-6
        channel: ION
        alignment:
          enabled: true
        stages:
          - name: Rough Mill 01
            milling:
              milling_current: 7.4e-10
              application_file: Si-ccs
              milling_voltage: 30000.0
            pattern:
              point:
                x: 0.0
                y: 0.0
                name: null
              width: 1.0e-05
              depth: 2.0e-06
              spacing: 4.6e-06
              upper_trench_height: 3.5e-06
              lower_trench_height: 3.5e-06
              cross_section: CleaningCrossSection
              name: Trench
            strategy:
              name: Standard
              config: {}
          - name: Rough Mill 02
            milling:
              milling_current: 2.0e-10
              application_file: Si-ccs
              milling_voltage: 30000.0
            pattern:
              point:
                x: 0.0
                y: 0.0
                name: null
              width: 9.5e-06
              depth: 2.0e-06
              spacing: 1.6e-06
              upper_trench_height: 2.0e-06
              lower_trench_height: 2.0e-06
              cross_section: CleaningCrossSection
              name: Trench
            strategy:
              name: Standard
              config: {}
          - name: Stress Relief Feature
            milling:
              milling_current: 1.0e-09
              patterning_mode: Serial
              application_file: Si
              milling_voltage: 30000.0
            pattern:
              point:
                x: 0.0
                y: 0.0
                name: null
              width: 5.0e-07
              height: 1.8e-05
              depth: 1.0e-06
              distance: 1.0e-05
              name: MicroExpansion
            strategy:
              name: Standard
              config: {}
  Polishing:
    task_type: MILL_POLISHING
    reference_imaging:
      field_of_view1: 50.0e-6
      field_of_view2: 100.0e-6
    milling:
      mill_polishing:
        name: Polishing
        field_of_view: 50.0e-6
        channel: ION
        alignment:
          enabled: true
        stages:
          - name: Polishing Mill 01
            milling:
              milling_current: 6.0e-11
              application_file: Si-ccs
              milling_voltage: 30000.0
            pattern:
              point:
                x: 0.0
                y: 0.0
                name: null
              width: 9.0e-06
              depth: 1.0e-06
              spacing: 3.0e-07
              upper_trench_height: 7.0e-07
              lower_trench_height: 7.0e-07
              cross_section: CleaningCrossSection
              time: 0.0
              fillet: 0.0
              name: Trench
            strategy:
              name: Standard
              config: {}
            alignment:
              enabled: true
workflow:
  name: ""
  description: ""
  tasks:
    - name: Setup Lamella Position
      attention: supervised
      required: true
      requires: []
    - name: Mill Fiducial
      attention: supervised
      required: true
      requires:
        - Setup Lamella Position
    - name: Rough Milling
      attention: supervised
      required: true
      requires:
        - Mill Fiducial
    - name: Polishing
      attention: supervised
      required: true
      requires:
        - Rough Milling
options:
  turn_beams_off: false
# Grid screening (FIB-1145). Sized to stay inside the Arctis compustage's reach
# (+/-377.8 um in y about the working slot) at 1536 x 1024: a tile's height is
# its field width x 1024 / 1536, so a square resolution reaches further in y and
# would skip rows. Both are at the SEM orientation, where the ion beam sees the
# grid foreshortened in y, so the FIB overview takes fewer rows. Fixed holders
# reach further.
grid_tasks:
  tasks:
    SEM Overview:
      task_type: BEAM_OVERVIEW_GRID
      orientation: SEM
      settings:
        image_settings:
          beam_type: ELECTRON
          resolution:
            - 1536
            - 1024
          dwell_time: 1.0e-06
          hfw: 500.0e-6
        nrows: 3
        ncols: 3
        overlap: 0.1
        autofocus_mode: none
    FIB Overview:
      task_type: BEAM_OVERVIEW_GRID
      orientation: SEM
      settings:
        image_settings:
          beam_type: ION
          resolution:
            - 1536
            - 1024
          dwell_time: 1.0e-06
          hfw: 250.0e-6
        nrows: 4
        ncols: 4
        overlap: 0.1
        autofocus_mode: none
  order:
    - SEM Overview
    - FIB Overview
