info:
    name: sim-tfs-arctis-configuration               
    ip_address: 192.168.0.1                                 
    manufacturer: Demo                                              
stage:
    enabled:                    true                        
    rotation_reference:         0                           
    shuttle_pre_tilt:           0                        
    manipulator_height_limit:   0.0037                      
    devices:                                                # where the stage travels for each instrument to see the sample
        FIBSEM:
            origin:     {x: 0.0}                            # the beams: the chamber origin                          [metres][SPECIFIED]
        FM:
            origin:     {x: 0.0}                            # the FM: under the grid, the same place, reached by re-posing [metres][SPECIFIED]
            acquisition_orientations: [FM, SEM, MILLING]    # the objective images the sample flipped (FM), or from the beam side at the SEM or a milling tilt [SPECIFIED]
electron:                                              
    enabled:                    true                        
    column_tilt:                0                           
    eucentric_height:           7.0e-3                      
    voltage:                    2000                        
    current:                    50.0e-12                    
    resolution:                 [1536, 1024]                
    hfw:                        150.0e-6                    
    dwell_time:                 1.0e-06                    
    detector_mode:              SecondaryElectrons          
    detector_type:              ETD                         
ion:
    enabled:                    true                        
    column_tilt:                52                         
    eucentric_height:           16.5e-3                     
    plasma:                     false                       
    plasma_gas:                 None                        
    voltage:                    30000                       
    current:                    2.0e-11                     
    resolution:                 [1536, 1024]                
    hfw:                        150.0e-6                   
    dwell_time:                 1.0e-06                     
    detector_mode:              SecondaryElectrons          
    detector_type:              ETD                         
fm:
  enabled: true
#   config: /home/patrick/github/fibsem/fibsem/config/fm/fm-configuration-default.yaml
manipulator:
    enabled:                    false                        
    rotation:                   false                       
    tilt:                       false                       
gis:
    enabled:                    true                        
    multichem:                  false                       
    sputter_coater:             false                                             
imaging:
    beam_type:                  ELECTRON                    
    resolution:                 [1536, 1024]               
    hfw:                        150.0e-6                    
    dwell_time:                 1.0e-06                     
    imaging_current:            2.0e-11                     
    autocontrast:               false                        
    save:                       false                       
milling:
    milling_voltage:            30000                       
    milling_current:            2.0e-09                        
    dwell_time:                 1.0e-06                     
    rate:                       3.4e-09                     
    spot_size:                  5.4e-08                     
    preset:                     "30 keV; 20 nA"             
sim:
    sem: null # "/path/to/sem/image/data"                   
    fib: null # "/path/to/fib/image/data"                   
    use_cycle: true
    sample:                                                 # synthetic cryo-grid both beams (and the FM) image through their projections (FIB-874); on for development
        grids_from_holder: false                          # grids at the holder's calibrated, occupied slots (content seeded by grid name; the holder file is shared by every configuration here); off: one grid at the boot position
        enabled: true
        coincidence_offset: 10.0e-6                        # height error at boot (m) - what the coincidence alignment corrects
        tilt_axis_offset: 0.0                              # surface height above the tilt axis (m); >0 makes the stage non-eucentric
        grid_pitch: 125.0e-6                               # mesh pitch (m)
        grid_bar_width: 35.0e-6                            # bar width (m)
        cell_type: mammalian                               # mammalian (adherent, fried-egg) | yeast | bacteria | mixed | none
        mammalian_density: 7.0                             # cells per 150 x 150 um; mammalian_radius / nucleus_radius set the sizes
        n_clusters: 35                                     # yeast: cell clusters over the extent
        cell_size: [4.5e-6, 12.0e-6]                       # cell radius range (m)
        noise_sigma: 12.0                                  # gaussian noise on the beam images
        noise_fraction: 0.15                               # uniform-noise blend on the beam images
        grid_rotation: null                                # degrees; null = random within +/- 45
        fiducial: false                                    # a cross at each grid centre, a navigation landmark; absent on a real grid
        contamination_density: 15.0                        # specks per 100 x 100 um (aperiodic content on film and bars)
        film: continuous                                   # continuous | holey (Quantifoil-style lattice: hole_diameter, hole_pitch; the coincidence measurement does not handle the lattice yet)
        rip_fraction: 0.03                                 # squares with the film torn away
        ice_density: 0.4                                   # ice plates per 100 x 100 um
        grid_radius: 1.4e-3                                # usable radius (m); beyond it the rim, then the holder
        beam_offset: {ion: [1.3e-6, 0.0]}                  # fixed per-beam misalignment (m): the coincidence measurement's dx
        current_offset_scale: 1.5e-6                       # sigma (m) of a seeded per-beam-current offset; 0 = off
    is_compustage: true
    loader:                                               # the simulated autoloader magazine
        capacity: 12
        occupied: [1, 2, 3]                               # 1-based slot numbers holding a grid
        names: {}                                         # slot number -> grid name; unnamed slots read as Grid-NN