info:
    name: tescan-microscope-configuration
    ip_address: localhost
    manufacturer: Tescan
stage:
    enabled:                    true
    rotation_reference:         180
    shuttle_pre_tilt:           0
    manipulator_height_limit:   0.0037
electron:
    enabled:                    true
    column_tilt:                0
    eucentric_height:           7.0e-3
    voltage:                    2000
    current:                    50.0e-12
    resolution:                 [1536, 1024]
    hfw:                        150.0e-6
    dwell_time:                 1.0e-06
    detector_mode:              null
    detector_type:              E-T
ion:
    enabled:                    true
    column_tilt:                55
    eucentric_height:           16.5e-3
    plasma:                     false
    plasma_gas:                 None
    voltage:                    30000
    current:                    2.0e-11
    resolution:                 [1536, 1024]
    hfw:                        150.0e-6
    dwell_time:                 1.0e-06
    detector_mode:              null
    detector_type:              SE
manipulator:
    enabled:                    true
    rotation:                   false
    tilt:                       false
gis:
    enabled:                    true
    multichem:                  true
    sputter_coater:             false
imaging:
    beam_type:                  ELECTRON
    resolution:                 [1536, 1024]
    hfw:                        150.0e-6
    dwell_time:                 1.0e-06
    imaging_current:            2.0e-11
    autocontrast:               false
    save:                       false
milling:
    milling_voltage:            30000
    milling_current:            2.0e-09
    dwell_time:                 1.0e-06
    rate:                       1.3e-08
    spacing:                    0.005
    spot_size:                  1.0e-06
    preset:                     "30 keV; 20 nA"
